PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = SoloProject
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine PreTestRoutine
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 3.3
      text [set every repeat] = $hun_word
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    TextboxComponent guess_box
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Your answer:
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.3
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    KeyboardComponent kb_enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent enter_fix
      Code Type = Auto->JS
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      Begin Routine:
        guess_box.text = ""
        feedback_msg = ""
        guess = ""
      Each Frame:
        # Check if ENTER is pressed
        keys = kb_enter.getKeys(['return'], waitRelease=False)

        if len(keys) > 0:
            participant_guess = guess_box.text.strip()

            # Store correctness to use in the next routine
            if participant_guess.lower() == hun_word.lower():
                feedback_msg = "Correct!"
            else:
                feedback_msg = f"Incorrect.\nCorrect answer: {hun_word}"

            # Force end of routine
            continueRoutine = False
      End Routine:
        thisExp.addData('guess', guess)
        # Store the guess and correct answer to use in feedback
        participant_guess = guess_box.text.strip()
        correct_answer = eng_word
        # Allow routine to end when Enter is pressed
        continueRoutine = False
  Routine FeedbackRoutine
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_text
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check correctness
        if participant_guess.lower() == correct_answer.lower():
            msg = f"Correct! The word was: {correct_answer}"
        else:
            msg = f"Wrong.\n{hun_word} is {correct_answer}"

        feedback_text.text = msg
      End Routine:
        core.wait(3.0)
        continueRoutine = False
  Routine StudyRoutine
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    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent study_words
      letterHeight = 0.05
      startVal [time (s)] = 0.4
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      text [set every repeat]:
        $hun_word + " is " + eng_word
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
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  Routine FinalTestRoutine
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    CodeComponent FinalTestCode
      Code Type = Auto->JS
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      Begin Experiment:
        test_feedback_msg = ""
      Begin Routine:
        test_feedback_msg = ""
        test_guess_box.text = ""
      Each Frame:
        keys = kb_test.getKeys(['return'], waitRelease=False)

        if len(keys) > 0:
            participant_answer = test_guess_box.text.strip()

            if participant_answer.lower() == eng_word.lower():
                test_feedback_msg = "Correct!"
            else:
                test_feedback_msg = f"Incorrect.\nCorrect answer: {eng_word}"

            continueRoutine = False
    TextComponent test_word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $hun_word
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    TextboxComponent test_guess_box
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent kb_test
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine TestFeedbackRoutine
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    TextComponent test_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $test_feedback_msg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        test_feedback.text = test_feedback_msg
        feedback_timer = 0
      Each Frame:
        feedback_timer += 1/60.0  # assuming 60 Hz monitor

        if feedback_timer >= 1.0:
            continueRoutine = False
  Routine FinalFix
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. Here are your instructions:

        Your task is to learn the English meaning of 20 Hungarian words.

        You will first be shown 10 Hungarian words and asked to guess their translation.

        You will then be given all 20 words to study.

        After this, there will be a final test of all 20 words.

        Press Space to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pretest_Instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be shown 10 Hungarian words.

        You have to guess the meaning of each. You will be shown feedback on the same.

        Press Enter to submit your answer.

        Press Space to begin this.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_Instructions
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be shown all 20 words and their meanings, one at a time.

        Press Space after each word to continue to the next.

        There is no time limit, so you may take your time to learn them.

        Press Space to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Final_Test_Instructions
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now give the final test on all 20 words.

        You will be shown a Hungarian word and tasked to enter its English meaning.

        Press Enter after each answer to submit it.

        Press Space to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The experiment has ended. Thank you for participating.
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Flow
  Routine Welcome
  Routine Pretest_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pretest_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('hun_word', 'Rzeka'), ('eng_word', 'River')]),
      OrderedDict([('hun_word', 'Kod'), ('eng_word', 'Code')]),
      OrderedDict([('hun_word', 'Miasto'), ('eng_word', 'City')]),
      OrderedDict([('hun_word', 'Piosenka'), ('eng_word', 'Song')]),
      OrderedDict([('hun_word', 'Deszcz'), ('eng_word', 'Rain')]),
      OrderedDict([('hun_word', 'Gwiazda'), ('eng_word', 'Star')]),
      OrderedDict([('hun_word', 'Okno'), ('eng_word', 'Window')]),
      OrderedDict([('hun_word', 'Pies'), ('eng_word', 'Dog')]),
      OrderedDict([('hun_word', 'Morze'), ('eng_word', 'Sea')]),
      OrderedDict([('hun_word', 'Chmura'), ('eng_word', 'Cloud')])]
    Routine PreTestRoutine
    Routine FeedbackRoutine
  LoopTerminator trials
  Routine Study_Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('hun_word', 'Pociąg'), ('eng_word', 'Train'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Obraz'), ('eng_word', 'Picture'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ciasto'), ('eng_word', 'Cake'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ptak'), ('eng_word', 'Bird'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Kawa'), ('eng_word', 'Coffee'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Las'), ('eng_word', 'Forest'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Obraz'), ('eng_word', 'Picture'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ulica'), ('eng_word', 'Street'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Zegar'), ('eng_word', 'Clock'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Sen'), ('eng_word', 'Dream'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Rzeka'), ('eng_word', 'River'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Kod'), ('eng_word', 'Code'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Miasto'), ('eng_word', 'City'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Piosenka'), ('eng_word', 'Song'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Deszcz'), ('eng_word', 'Rain'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Gwiazda'), ('eng_word', 'Star'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Okno'), ('eng_word', 'Window'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Pies'), ('eng_word', 'Dog'), ('pretested', 'yes')])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
    Routine StudyRoutine
  LoopTerminator trials_2
  Routine Final_Test_Instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('hun_word', 'Pociąg'), ('eng_word', 'Train'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Obraz'), ('eng_word', 'Picture'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ciasto'), ('eng_word', 'Cake'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ptak'), ('eng_word', 'Bird'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Kawa'), ('eng_word', 'Coffee'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Las'), ('eng_word', 'Forest'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Drzewo'), ('eng_word', 'Tree'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Ulica'), ('eng_word', 'Street'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Zegar'), ('eng_word', 'Clock'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Sen'), ('eng_word', 'Dream'), ('pretested', 'no')]),
      OrderedDict([('hun_word', 'Rzeka'), ('eng_word', 'River'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Kod'), ('eng_word', 'Code'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Miasto'), ('eng_word', 'City'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Piosenka'), ('eng_word', 'Song'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Deszcz'), ('eng_word', 'Rain'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Gwiazda'), ('eng_word', 'Star'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Okno'), ('eng_word', 'Window'), ('pretested', 'yes')]),
      OrderedDict([('hun_word', 'Pies'), ('eng_word', 'Dog'), ('pretested', 'yes')])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
    Routine FinalFix
    Routine FinalTestRoutine
    Routine TestFeedbackRoutine
  LoopTerminator trials_3
  Routine Thank_you
